CellProfiler Pipeline: http://www.cellprofiler.org
Version:3
DateRevision:300
GitHash:
ModuleCount:15
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Color image
    Name to assign these images:rawImages
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    Set intensity range from:Image bit-depth
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
ColorToGray:[module_num:5|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
    Select the input image:rawImages
    Conversion method:Split
    Image type:Channels
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    Channel count:2
    Channel number:Red: 1
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    Image name:Orig647
    Channel number:Green: 2
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    Image name:Orig405

IdentifyPrimaryObjects:[module_num:6|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
    Select the input image:Orig405
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):200,450
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Propagate
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ExpandOrShrinkObjects:[module_num:7|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
    Select the input objects:Nuclei
    Name the output objects:expNuclei
    Select the operation:Expand objects by a specified number of pixels
    Number of pixels by which to expand or shrink:50
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
MaskImage:[module_num:8|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
    Select the input image:Orig647
    Name the output image:cells_in_647
    Use objects or an image as a mask?:Objects
    Select object for mask:expNuclei
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    Invert the mask?:No

MeasureObjectIntensity:[module_num:9|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
    Hidden:1
    Select an image to measure:cells_in_647
    Select objects to measure:expNuclei

OverlayOutlines:[module_num:10|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:Orig647
    Name the output image:OrigOverlay
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Nuclei
    Select outline color:#FF0080
    Select objects to display:expNuclei

OverlayOutlines:[module_num:11|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
    Display outlines on a blank image?:Yes
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    Name the output image:gsOverlay
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:expNuclei

SaveImages:[module_num:12|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
    Select the type of image to save:Image
    Select the image to save:OrigOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_multi_branch_overlay
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\6-29-2018\\\\\\\\results\\\\\\\\overlays
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:13|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
    Select the type of image to save:Image
    Select the image to save:gsOverlay
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_gs_overlay
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\6-29-2018\\\\\\\\results\\\\\\\\grayscale_overlays
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
SaveImages:[module_num:14|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
    Select the type of image to save:Image
    Select the image to save:cells_in_647
    Select method for constructing file names:From image filename
    Select image name for file prefix:rawImages
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_just_expNuclei
    Saved file format:png
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\6-29-2018\\\\\\\\results\\\\\\\\segmented_images
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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
ExportToSpreadsheet:[module_num:15|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
    Select the column delimiter:Tab
    Add image metadata columns to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Elsewhere...|E:\\\\\\\\Data2\\\\\\\\Brian\\\\\\\\6-29-2018\\\\\\\\results
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:expNuclei|Intensity_MinIntensity_cells_in_647,expNuclei|Intensity_IntegratedIntensity_cells_in_647,expNuclei|Intensity_MaxIntensity_cells_in_647,expNuclei|Intensity_MedianIntensity_cells_in_647,expNuclei|Intensity_MeanIntensity_cells_in_647
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:cbx5_multi_branch_quant_
    Overwrite existing files without warning?:No
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